Journal

Version VersionNumber=2.4
Stack
  dupStackImage = m 1 5 10 0 1 -1 -1 40 Image 4_Maximum intensity projection.ome
  copyIm = "Stack"
Save Interactive
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 2
Remove Plane
  im = m 1 5 10 0 1 -1 -1 41 Image 27_Maximum intensity projection.ome
  removedPlaneIm = "Remove Plane"
  nPlaneToRemove = 0
  bKeepAfterRemoving = TRUE
  stNewName = "1"
  bLastPlaneRemovable = TRUE
Remove Plane
  im = m 1 5 10 0 1 -1 -1 41 Image 27_Maximum intensity projection.ome
  removedPlaneIm = "Remove Plane"
  nPlaneToRemove = 0
  bKeepAfterRemoving = TRUE
  stNewName = "1"
  bLastPlaneRemovable = TRUE
Rename Image
  imRenameImage = m 1 7 9 0 1 3 0 43 Image 27_Maximum intensity projection.ome-1
  newImageName = "Green"
Rename Image
  imRenameImage = m 1 5 9 0 1 -1 -1 41 Image 27_Maximum intensity projection.ome
  newImageName = "Blue"
Rename Image
  imRenameImage = m 1 3 9 0 1 -1 -1 45 Image 27_Maximum intensity projection.ome-1-2
  newImageName = "Red"
Color Combine
  imRed = "Red"
  imGreen = "Green"
  imBlue = "Blue"
  imStack = m 1 2 9 2 1 -1 -1 8 Untitled
  imDest = "Color Combine"
  imSource8 = m 1 2 9 2 1 -1 -1 8 Untitled
  bColorEncode = FALSE
  nSource = 1
  nResultDepth = 2
  bHueRendering = FALSE
Calibrate Distances
  im = m 1 2 9 2 1 -1 -1 8 Untitled
  iImageType = 3
  dpCalX = 0.132
  dpCalY = 0.132
  stVideoName = ""
  stUnitName = "um"
Granularity
  imSourceWL1 = "Red"
  imSourceWL2 = m 1 2 9 2 1 -1 -1 8 Untitled
  imDestWL1 = "Granules"
  bResultWL1 = TRUE
  dApproxMinWidthWL1 = 0.5
  dApproxMaxWidthWL1 = 4
  dMinIntensityWL1 = 22000
  bUseWL2 = FALSE
  dApproxMinWidthWL2 = 1
  dApproxMaxWidthWL2 = 5
  dMinIntensityWL2 = 100
  ASSAY_config_summary_log_string = "NPTRESWZOXXXXXXXXXXXXXXXXX"
  ASSAY_config_data_log_string = "NPTRESWZOXXXXXXXXXXX"
  iRootAlgorithm = 0
Rename Image
  imRenameImage = m 1 3 9 0 1 -1 -1 10 Granules-2
  newImageName = "RedGranules"
Granularity
  imSourceWL1 = "Blue"
  imSourceWL2 = m 1 2 9 2 1 -1 -1 8 Untitled
  imDestWL1 = "UnDilGran"
  bResultWL1 = TRUE
  dApproxMinWidthWL1 = 0.5
  dApproxMaxWidthWL1 = 4
  dMinIntensityWL1 = 20000
  bUseWL2 = FALSE
  dApproxMinWidthWL2 = 1
  dApproxMaxWidthWL2 = 5
  dMinIntensityWL2 = 100
  ASSAY_config_summary_log_string = "NPTRESWZOXXXXXXXXXXXXXXXXX"
  ASSAY_config_data_log_string = "NPTRESWZOXXXXXXXXXXX"
  iRootAlgorithm = 0
Morphological Dilate
  imSrcIm = m 1 7 9 0 1 12 0 12 BlueGranules
  imDestIm = "Dilate"
  nShapeSize = 5
  nShape = 1
Rename Image
  imRenameImage = m 1 7 9 0 1 13 0 10 Granules-3
  newImageName = "BlueGranules"
Binary Operations
  imSource = "Green"
  imDest = "Binary"
  bUseThresholdVars = TRUE
  nThresholdState = 1
  uThresholdMin = 0
  uThresholdMax = 65535
Rename Image
  imRenameImage = m 1 3 9 0 1 -1 -1 6 Binary
  newImageName = "GreenBinary"
Binary Operations
  imSource = "RedGranules"
  imDest = "Binary"
  bUseThresholdVars = TRUE
  nThresholdState = 1
  uThresholdMin = 1
  uThresholdMax = 65535
Rename Image
  imRenameImage = m 1 3 9 0 1 -1 -1 6 Binary
  newImageName = "RedBinary"
Binary Operations
  imSource = "BlueGranules"
  imDest = "Binary"
  bUseThresholdVars = TRUE
  nThresholdState = 1
  uThresholdMin = 1
  uThresholdMax = 65535
Rename Image
  imRenameImage = m 1 3 9 0 1 -1 -1 6 Binary
  newImageName = "BlueBinary"
Arithmetic
  iOperation = 8
  iSecondSource = 1
  nNumerator = 1
  nDenominator = 1
  nResultDepth = 1
  imSource1 = "GreenBinary"
  imSource2 = "RedBinary"
  imDest = "AND"
Rename Image
  imRenameImage = m 1 3 9 0 1 -1 -1 3 AND
  newImageName = "ANDgr"
Arithmetic
  iOperation = 8
  iSecondSource = 1
  nNumerator = 1
  nDenominator = 1
  nResultDepth = 1
  imSource1 = "RedBinary"
  imSource2 = "BlueBinary"
  imDest = "AND"
Rename Image
  imRenameImage = m 1 3 9 0 1 -1 -1 3 AND
  newImageName = "ANDrb"
Arithmetic
  iOperation = 8
  iSecondSource = 1
  nNumerator = 1
  nDenominator = 1
  nResultDepth = 1
  imSource1 = "GreenBinary"
  imSource2 = "BlueBinary"
  imDest = "AND"
Rename Image
  imRenameImage = m 1 3 9 0 1 -1 -1 3 AND
  newImageName = "ANDgb"
Arithmetic
  iOperation = 8
  iSecondSource = 1
  nNumerator = 1
  nDenominator = 1
  nResultDepth = 1
  imSource1 = "GreenBinary"
  imSource2 = "ANDrb"
  imDest = "AND"
Rename Image
  imRenameImage = m 1 3 9 0 1 -1 -1 3 AND
  newImageName = "ANDgrb"
Disabled Load Regions Interactive
  stFilename = "\\vmware-host\Shared Folders\Desktop\Lauren\VC2595 regions\2414_ctrl_prox6.rgn"
  openImage = "Green"
Transfer Regions Interactive
  imSourceImage = m 1 7 9 0 1 8 0 3 Red
  imDestImage = "Green"
  nRegionSel = 1
  bSrcClear = FALSE
  bDstClear = FALSE
Transfer Regions
  imSourceImage = "Green"
  imDestImage = "Red"
  nRegionSel = 2
  bSrcClear = FALSE
  bDstClear = FALSE
Transfer Regions
  imSourceImage = "Green"
  imDestImage = "Blue"
  nRegionSel = 2
  bSrcClear = FALSE
  bDstClear = FALSE
Transfer Regions
  imSourceImage = "Green"
  imDestImage = m 1 7 9 0 1 10 0 3 Red
  nRegionSel = 2
  bSrcClear = FALSE
  bDstClear = FALSE
Transfer Regions
  imSourceImage = "Green"
  imDestImage = m 1 7 9 0 1 12 0 4 Blue
  nRegionSel = 2
  bSrcClear = FALSE
  bDstClear = FALSE
Transfer Regions
  imSourceImage = "Green"
  imDestImage = m 1 7 9 0 1 15 0 13 GreenGranules
  nRegionSel = 2
  bSrcClear = FALSE
  bDstClear = FALSE
Transfer Regions
  imSourceImage = "Green"
  imDestImage = m 1 7 9 0 1 17 0 11 RedGranules
  nRegionSel = 1
  bSrcClear = FALSE
  bDstClear = FALSE
Transfer Regions
  imSourceImage = "Green"
  imDestImage = m 1 7 9 0 1 19 0 11 RedGranules
  nRegionSel = 1
  bSrcClear = FALSE
  bDstClear = FALSE
Transfer Regions
  imSourceImage = "Green"
  imDestImage = m 1 7 9 0 1 21 0 11 RedGranules
  nRegionSel = 1
  bSrcClear = FALSE
  bDstClear = FALSE
Transfer Regions
  imSourceImage = "Green"
  imDestImage = m 1 7 9 0 1 23 0 12 BlueGranules
  nRegionSel = 2
  bSrcClear = FALSE
  bDstClear = FALSE
Transfer Regions
  imSourceImage = "Green"
  imDestImage = m 1 7 9 0 1 25 0 11 GreenBinary
  nRegionSel = 2
  bSrcClear = FALSE
  bDstClear = FALSE
Transfer Regions
  imSourceImage = "Green"
  imDestImage = m 1 7 9 0 1 27 0 9 RedBinary
  nRegionSel = 2
  bSrcClear = FALSE
  bDstClear = FALSE
Save Regions
  stFilename = "\\vmware-host\Shared Folders\Desktop\Lauren\region.rgn"
  saveImage = "Green"
Region Measurements
  imSource = "Green"
  nSelectorPlane = 10
  nTab = 2
  nPopInclude = 0
  nDisplayViews = 0
  nRegionLabel = 4
  nChannel = 0
  bUseThreshold = FALSE
  abMeasurements = TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE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
  abRegionLabels = FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE
  nSpecifiedPlane = 1
  nPopGraphType = 0
  anPopGraphXAxis = 0 0 0 0
  anPopGraphYAxis = 0 0 0 0
  nGraphNumBin = 10
  nPopGraphUnit = 0
  strGraphSettings = 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
  bLogCalibration = FALSE
  bLogHeaders = TRUE
Region Measurements
  imSource = "Red"
  nSelectorPlane = 10
  nTab = 2
  nPopInclude = 0
  nDisplayViews = 0
  nRegionLabel = 4
  nChannel = 0
  bUseThreshold = FALSE
  abMeasurements = TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE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
  abRegionLabels = FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE
  nSpecifiedPlane = 1
  nPopGraphType = 0
  anPopGraphXAxis = 0 0 0 0
  anPopGraphYAxis = 0 0 0 0
  nGraphNumBin = 10
  nPopGraphUnit = 0
  strGraphSettings = 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
  bLogCalibration = FALSE
  bLogHeaders = TRUE
Region Measurements
  imSource = "Blue"
  nSelectorPlane = 10
  nTab = 2
  nPopInclude = 0
  nDisplayViews = 0
  nRegionLabel = 4
  nChannel = 0
  bUseThreshold = FALSE
  abMeasurements = TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE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
  abRegionLabels = FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE
  nSpecifiedPlane = 1
  nPopGraphType = 0
  anPopGraphXAxis = 0 0 0 0
  anPopGraphYAxis = 0 0 0 0
  nGraphNumBin = 10
  nPopGraphUnit = 0
  strGraphSettings = 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
  bLogCalibration = FALSE
  bLogHeaders = TRUE
Integrated Morphometry - Measure
  imSource = "Green"
  nColor = 0
  imMask = "GreenBinary"
  bMeasureUsingMask = TRUE
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 5 Green
  nDisplay = 2
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 5 Green
  nDisplay = 1
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Reset Current
Integrated Morphometry - Measure
  imSource = "Red"
  nColor = 0
  imMask = "RedBinary"
  bMeasureUsingMask = TRUE
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 3 Red
  nDisplay = 1
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 3 Red
  nDisplay = 2
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Reset Current
Integrated Morphometry - Measure
  imSource = "Blue"
  nColor = 0
  imMask = "BlueBinary"
  bMeasureUsingMask = TRUE
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 4 Blue
  nDisplay = 1
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 4 Blue
  nDisplay = 2
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Reset Current
Integrated Morphometry - Measure
  imSource = "Green"
  nColor = 0
  imMask = "ANDgr"
  bMeasureUsingMask = TRUE
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 5 Green
  nDisplay = 1
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 5 Green
  nDisplay = 2
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Reset Current
Integrated Morphometry - Measure
  imSource = "Red"
  nColor = 0
  imMask = "ANDgr"
  bMeasureUsingMask = TRUE
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 3 Red
  nDisplay = 1
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 3 Red
  nDisplay = 2
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Reset Current
Integrated Morphometry - Measure
  imSource = "Red"
  nColor = 0
  imMask = "ANDrb"
  bMeasureUsingMask = TRUE
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 3 Red
  nDisplay = 1
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 3 Red
  nDisplay = 2
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Reset Current
Integrated Morphometry - Measure
  imSource = "Blue"
  nColor = 0
  imMask = "ANDrb"
  bMeasureUsingMask = TRUE
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 4 Blue
  nDisplay = 1
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 4 Blue
  nDisplay = 2
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Reset Current
Integrated Morphometry - Measure
  imSource = "Green"
  nColor = 0
  imMask = "ANDgb"
  bMeasureUsingMask = TRUE
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 5 Green
  nDisplay = 1
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 5 Green
  nDisplay = 2
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Reset Current
Integrated Morphometry - Measure
  imSource = "Blue"
  nColor = 0
  imMask = "ANDgb"
  bMeasureUsingMask = TRUE
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 4 Blue
  nDisplay = 1
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 4 Blue
  nDisplay = 2
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Reset Current
Integrated Morphometry - Measure
  imSource = "Green"
  nColor = 0
  imMask = "ANDgrb"
  bMeasureUsingMask = TRUE
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 5 Green
  nDisplay = 1
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 5 Green
  nDisplay = 2
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Reset Current
Integrated Morphometry - Measure
  imSource = "Red"
  nColor = 0
  imMask = "ANDgrb"
  bMeasureUsingMask = TRUE
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 3 Red
  nDisplay = 1
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 3 Red
  nDisplay = 2
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Reset Current
Integrated Morphometry - Measure
  imSource = "Blue"
  nColor = 0
  imMask = "ANDgrb"
  bMeasureUsingMask = TRUE
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 4 Blue
  nDisplay = 1
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Log Data
  imSource = m 1 3 9 0 1 -1 -1 4 Blue
  nDisplay = 2
  nMode = 1
  nParm = 1
  nYParm = 2
Integrated Morphometry - Reset Current
Transfer Regions Interactive
  imSourceImage = m 1 7 9 0 1 8 0 5 Green
  imDestImage = "Green"
  nRegionSel = 1
  bSrcClear = FALSE
  bDstClear = FALSE
Region Measurements
  imSource = m 1 7 10 0 1 8 0 3 Red
  nSelectorPlane = 10
  nTab = 2
  nPopInclude = 0
  nDisplayViews = 0
  nRegionLabel = 4
  nChannel = 0
  bUseThreshold = FALSE
  abMeasurements = TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE TRUE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
  abRegionLabels = FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE
  nSpecifiedPlane = 1
  nPopGraphType = 0
  anPopGraphXAxis = 0 0 0 0
  anPopGraphYAxis = -1 0 0 0
  nGraphNumBin = 10
  nPopGraphUnit = 0
  strGraphSettings = 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
  bLogCalibration = TRUE
  bLogHeaders = TRUE
Close All
  nCloseAllOption = 1
